PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = lexical_decision_EnTr
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine welcome_2
    RoutineSettingsComponent welcome_2
      durationEstim = 5
      saveStartStop = False
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    TextComponent text
      durationEstim = 5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For non words press left arrow button (<-) for real words press right arrow button (->).

        Please answer as fast as possible.

        Press space to start the task.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome1
    RoutineSettingsComponent welcome1
      durationEstim = 5
      saveStartStop = False
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    TextComponent welcome
      durationEstim = 5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
         Hi, welcome to lexical decision task.

        In this task you are expected to decide if the word shown in the screen are real words or non words.

        The experiment have 2 parts, first part will be in English and the second part will be in Turkish.

        Press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.05
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  Routine task1
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    TextComponent text_2
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine task2
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    TextComponent text_3
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $kelime
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $cevap
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine bye
    RoutineSettingsComponent bye
      saveStartStop = False
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    TextComponent text_4
      durationEstim = 3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Thank you for joining the task.

        You can press esc to exit.
    KeyboardComponent key_resp_5
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine nownext
    RoutineSettingsComponent nownext
      saveStartStop = False
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    TextComponent text_5
      durationEstim = 5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you will see the Turkish wors.

        Press space to start.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome1
  Routine welcome_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item': 'anorous', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'beautifian', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'fedraggled', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'kegan', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'tefuddling', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'gelievably', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'setrays', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'mestowal', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'liases', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'riological', 'cond': 'nonword', 'corr_ans': "left'"},
      {'item': 'absence', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'ballet', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'oppress', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'survival', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'windowsill', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'exposure', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'twopence', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'critter', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'gaped', 'cond': 'word', 'corr_ans': "right'"},
      {'item': 'inspection', 'cond': 'word', 'corr_ans': "right'"}]
    Routine task1
  LoopTerminator trials
  Routine nownext
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trial2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'kelime': 'arıza', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'dolap', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'özlem', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'şikayet', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'mehtap', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'bahis', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'çerçeve', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'giysi', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'sınav', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'kıvanç', 'kosul': 'kelime', 'cevap': "right'"},
      {'kelime': 'talanç', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'sarpın', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'mersat', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'örlet', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'pinter', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'yulak', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'dizmer', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'şefrot', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'kandol', 'kosul': 'kelimed', 'cevap': "left'"},
      {'kelime': 'belitü', 'kosul': 'kelimed', 'cevap': "left'"}]
    Routine task2
  LoopTerminator trials_2
  Routine bye
